PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = visual_oddball
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    ImageComponent visual_stimulus
      image [set every repeat] = $imageFile
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDuration
      units = height
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        # Increment counter at the beginning of each trial
        trialnr = trials.thisN

        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        # Hardware triggers for TMSI APEX EEG
        if visual_stimulus.status == STARTED and not stimulus_pulse_started:
            win.callOnFlip(ser.write, f"{marker:02d}".encode())
            stimulus_pulse_start_time = globalClock.getTime()
            stimulus_pulse_started = True

        if stimulus_pulse_started and not stimulus_pulse_ended:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.02:
                win.callOnFlip(ser.write, "00".encode())
                stimulus_pulse_ended = True
      End Routine:
        # Check if we've completed 150 trials (a block)
        if (trials.thisN + 1) % 150 == 0 and trials.thisN < trials.nTotal - 1:
            # Set a flag to show the break
            expInfo['show_break'] = True
        else:
            expInfo['show_break'] = False
    TextComponent trialnumber
      letterHeight = 0.05
      pos = (-0.60, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi + stimDuration
      text [set every repeat] = $"%d" % trialnr
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    TextComponent crosshair
      letterHeight = 0.15
      startVal [time (s)] = $stimDuration
      stopVal [duration (s)] = $isi + stimDuration
      text = +
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    SerialOutComponent serialPort
      baudrate = 115200
      bytesize = 8
      disabled = True
      getResponse = False
      parity = N
      port = COM8
      startVal [time (s)] = 0
      startdata = $str(marker)
      stopVal [duration (s)] = 0.2
      stopbits = 1
      stopdata = '"0"'
      syncScreenRefresh = True
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  Routine instructions
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        You'll see visual stimuli (circles) presented one at a time. There are two different stimuli: a white circle (standard) and a black circle (deviant). You will be presented with a total of 300 trials split into 2 blocks.

        Your task is to count the number of times you see the black circle (deviant stimulus). At the end of each block, you will report how many black circles you counted.

        A fixation cross (+) will appear between stimuli. Try to keep your eyes centered, sit as still as possible, and minimize blinking during stimulus presentation. You'll get time to rest between blocks.

        Press SPACE to start the experiment.
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    CodeComponent code_3
      Code Type = Py
      Before Experiment:
        # LSL (Lab Streaming Layer) for real-time data streaming
        # Uncomment if using LSL with external recording software
        # from pylsl import StreamInfo, StreamOutlet
        # info = StreamInfo('Trigger', 'Markers', 1, 0, 'string', 'myuidw43536')
        # outlet = StreamOutlet(info)
      Begin Experiment:
        # Initialize the break flag
        expInfo['show_break'] = False

        # Serial port for hardware triggers to TMSI APEX EEG
        import serial
        ser = serial.Serial("COM8", 115200, timeout=1)
      End Experiment:
        # OxySoft event marker - uncomment if using OxySoft
        # oxysoft.WriteEvent("E", "Experiment ended in PsychoPy")
  Routine break_2
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine end
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    TextComponent text_norm_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Done!
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    CodeComponent code_4
      Code Type = Py
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      End Experiment:
        # Close serial port for TMSI APEX EEG
        ser.close()
  Routine pause
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Experiment starting in 2 seconds
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  Routine block_break
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    TextComponent text_norm_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Have some rest, blink etc. then press SPACE to continue.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_4
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        # Skip this routine if it's not time for a break
        if not expInfo.get('show_break', False):
            continueRoutine = False
  Routine verwe
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine instructions
  Routine pause
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = oddball_conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('soundFile', 'standard.wav'), ('trialType', 'standard'), ('isi', np.float64(2.5674900247173253)), ('marker', np.int64(1)), ('block', np.int64(1))]),
      OrderedDict([('soundFile', 'standard.wav'), ('trialType', 'standard'), ('isi', np.float64(2.381294573001352)), ('marker', np.int64(1)), ('block', np.int64(1))]),
      OrderedDict([('soundFile', 'deviant.wav'), ('trialType', 'deviant'), ('isi', np.float64(2.6278474533689744)), ('marker', np.int64(2)), ('block', np.int64(1))]),
      OrderedDict([('soundFile', 'standard.wav'), ('trialType', 'standard'), ('isi', np.float64(2.4126661267059517)), ('marker', np.int64(1)), ('block', np.int64(1))]),
      OrderedDict([('soundFile', 'standard.wav'), ('trialType', 'standard'), ('isi', np.float64(2.838987939785518)), ('marker', np.int64(1)), ('block', np.int64(1))]),
      OrderedDict([('soundFile', 'standard.wav'), ('trialType', 'standard'), ('isi', np.float64(2.7128624836689514)), ('marker', np.int64(1)), ('block', np.int64(1))]),
      OrderedDict([('soundFile', 'standard.wav'), ('trialType', 'standard'), ('isi', np.float64(2.462350941224749)), ('marker', np.int64(1)), ('block', np.int64(1))]),
      OrderedDict([('soundFile', 'standard.wav'), ('trialType', 'standard'), ('isi', np.float64(2.803521159492555)), ('marker', np.int64(1)), ('block', np.int64(1))]),
      OrderedDict([('soundFile', 'deviant.wav'), ('trialType', 'deviant'), ('isi', np.float64(2.21650263057787)), ('marker', np.int64(2)), ('block', np.int64(1))])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
    Routine trial
    Routine block_break
  LoopTerminator trials
  Routine end
